AgilityStat
AIR700ICRU
0, 0, 0, 0, 1, 3, 0,  IWATCH ETC.
{{nhist}}, 533, 769, 1000, 0, 0, 0, 0,  NCASE ETC.
0, 31, 1, 0, 0, 0, 0, 0, 0, 0, IQIN, ISOURCE + OPTIONS
{{stats_model}}
0, 0, 0.7, 0.01, 0, -1, 2.0, 0, ECUT,PCUT,IREJCT,ESAVE
0, 1, 1, 1, 7,  PHOTON FORCING
1, 4,  SCORING INPUT
1, 1
30.0,
0,  DOSE COMPONENTS
{{z_phsp}}, Z TO FRONT FACE
*********** start of CM SLABS with identifier PREJAWS  ***********
15.0, RMAX
air before jaws
1, NSLABS
{{z_phsp}}, ZMIN
0.1, 0.7, 0.01, 0, 0, 0
AIR700ICRU
*********** start of CM SYNCMLCE with identifier mlc  ***********
{mlc_template}
*********** start of CM SYNCEJAWS with identifier yjaw  ***********
35.0, RMAX
SYNCJAW settings
1, {{delivery_mode}}, # PAIRED BARS OR JAWS, field type
Y
3.5, 13.5
{{jaws_file}}
0.7, 0.01, 0, 0,
0.7, 0.01, 0, 0,
WNiFe700
*********** start of CM SLABS with identifier AIRSLAB  ***********
35, RMAX
airslab
1, NSLABS
59.99, ZMIN
{{filler_depth}}, 0.7, 0.01, 0, 0, 0
AIR700ICRU
*********************end of all CMs*****************************
 #########################
 :Start MC Transport Parameter:
 
 Global ECUT= 0.7
 Global PCUT= 0.01
 Global SMAX= 10000000000.
 ESTEPE= 0.25
 XIMAX= 0.5
 Boundary crossing algorithm= EXACT
 Skin depth for BCA= 3.
 Electron-step algorithm= PRESTA-II
 Spin effects= On
 Brems angular sampling= KM
 Brems cross sections= NRC
 Bound Compton scattering= Off
 Compton cross sections= default
 Pair angular sampling= Simple
 Pair cross sections= NRC
 Photoelectron angular sampling= Off
 Rayleigh scattering= Off
 Atomic relaxations= Off
 Electron impact ionization= Off
 Photon cross sections= xcom
 Photon cross-sections output= Off
 
 :Stop MC Transport Parameter:
 #########################