6MV cyberknife                                                                  #!GUI1.0
AIR700ICRU
0, 0, 0, 0, 1, 3, 0,  IWATCH ETC.
500000, 533, 769, 1000, 2, 1000, 0, 0,  NCASE ETC.
0.5, 80, 3, 3, 0, 10.3,  DIRECTIONAL BREM OPTIONS
-1, 19, 0.085, 0.0, 0.0, 1.0, 0.0, 0.085, 0.0, 0.0,  IQIN, ISOURCE + OPTIONS
0, MONOENERGETIC
7.6
0, 0, 0.7, 0.01, 0, 0, ,  0 , ECUT,PCUT,IREJCT,ESAVE
0, 1, 1, 1, 7,  PHOTON FORCING
1, 6,  SCORING INPUT
1, 1
10.0, 
0,  DOSE COMPONENTS
-0.049, Z TO FRONT FACE
*********** start of CM SLABS with identifier TARGET  ***********
1.0, RMAX
Target and backing
2, NSLABS
-0.0489, ZMIN
0.0889, 0.7, 0.01, 0, 0, 1.0
W700ICRU
0.1575, 0.7, 0.01, 0, 0, 1.0
CU700ICRU
*********** start of CM CONS3R with identifier PRIMCOLL  ***********
5, RMAX
Primary Collimator
0.1975, ZMIN
10, ZTHICK
2, NUM_NODE
0.1975, 0.215, 
10.1975, 0.9, 
0.7, 0.01, 0, 0, 0, 
VACUUM
0.7, 0.01, 0, 0, 0, 
W700ICRU
*********** start of CM FLATFILT with identifier FLATFIL  ***********
3.81, RMAX
lead electron filter
10.1975, ZMIN
2, NUMBER OF LAYERS
1, 0.2, # CONES, ZTHICK OF LAYER 1
3.81, 
3.81, 
1, 0.075, # CONES, ZTHICK OF LAYER 2
3.81, 
3.81, 
0.7, 0.01, 0, 0, 
AIR700ICRU
0.7, 0.01, 0, 0, 
AIR700ICRU
0.7, 0.01, 0, 0, 
PB700ICRU
0.7, 0.01, 0, 0, 
AIR700ICRU
*********** start of CM CONS3R with identifier PPSHIELD  ***********
7, RMAX
Patient plane shield
16, ZMIN
9, ZTHICK
2, NUM_NODE
16, 0.78, 
25, 1.15, 
0.7, 0.01, 0, 0, 0, 
AIR700ICRU
0.7, 0.01, 0, 0, 0, 
W700ICRU
*********** start of CM CONS3R with identifier CONE  ***********
7, RMAX
Fixed 0.5 cm cone
31, ZMIN
9, ZTHICK
4, NUM_NODE
31, 0.5, 
32.85, 0.5, 
32.85, 0.125, 
40, 0.125, 
0.7, 0.01, 0, 0, 0, 
AIR700ICRU
0.7, 0.01, 0, 0, 0, 
W700ICRU
*********** start of CM SLABS with identifier AIRSLAB ***********
7, RMAX
air slab
1, NSLABS
40, ZMIN
10, 0.7, 0.01, 1, 4, 0
AIR700ICRU
*********************end of all CMs*****************************
 #########################
 :Start MC Transport Parameter:
 
 Global ECUT= 0.7
 Global PCUT= 0.01
 Global SMAX= 10000000000.
 ESTEPE= 0.25
 XIMAX= 0.5
 Boundary crossing algorithm= EXACT
 Skin depth for BCA= 3.
 Electron-step algorithm= PRESTA-II
 Spin effects= On
 Brems angular sampling= KM
 Brems cross sections= NRC
 Bound Compton scattering= Off
 Compton cross sections= default
 Pair angular sampling= Simple
 Pair cross sections= NRC
 Photoelectron angular sampling= Off
 Rayleigh scattering= Off
 Atomic relaxations= Off
 Electron impact ionization= Off
 Photon cross sections= xcom
 Photon cross-sections output= Off
 
 :Stop MC Transport Parameter:
 #########################
 :Start DBS rejection plane:
 
 Use a rejection plane= On
 Z(cm) from zero reference plane= 45
 
 :Stop DBS rejection plane:
 #########################
