15MV Linac                                                                       #!GUI1.0
AIR700ICRU
0, 0, 0, 0, 1, 3, 0,  IWATCH ETC.
{{nhist}}, 533, 769, 1000, 2, 1000, 0, 0,  NCASE ETC.
{{dbs_radius}}, 100, 4, 71, 1, 13.107,  DIRECTIONAL BREM OPTIONS
-1, 19, -{{e_fwhm}}, 0.0, 0.0, 1.0, 0.0, -{{e_fwhm}}, 0.0, 0.0,  IQIN, ISOURCE + OPTIONS
0, MONOENERGETIC
{{e_energy}}
0, 0, 0.7, 0.01, 0, -1, 2.0,  0 , ECUT,PCUT,IREJCT,ESAVE
0, 1, 1, 1, 7,  PHOTON FORCING
1, 10,  SCORING INPUT
1, 1
30.0,
0,  DOSE COMPONENTS
0, Z TO FRONT FACE
*********** start of CM SLABS with identifier TARGET  ***********
3.0, RMAX
Target and backing
3, NSLABS
0, ZMIN
0.0635, 0.7, 0.01, 1, 1, 1.0
WTARGET700
0.7925, 0.7, 0.01, 1, 2, 1.0
CU700ICRU
0.744, 0.7, 0.01, 1, 0, 1.0
VACUUM
*********** start of CM CONS3R with identifier PRIMCOLL  ***********
10.0, RMAX
Primary Collimator
1.6, ZMIN
6.0, ZTHICK
2, NUM_NODE
1.6, 0.6103,
7.6, 2.08915,
0.7, 0.01, 2, 0, 0,
VACUUM
0.7, 0.01, 2, 3, 0,
WPRIMCOLL700
*********** start of CM SLABS with identifier XWIN  ***********
10.0, RMAX
Vacuum Window
2, NSLABS
7.6, ZMIN
1.2954, 0.7, 0.01, 0, 0, 5.0
VACUUM
0.0254, 0.7, 0.01, 0, 8, 5.0
BE700ICRU
*********** start of CM FLATFILT with identifier FLATFILT  ***********
3.81, RMAX
15X Flattening Filter
10.9278, ZMIN
70, NUMBER OF LAYERS
1, 0.06604, # CONES, ZTHICK OF LAYER 1
0,
0.1016,
1, 0.09144, # CONES, ZTHICK OF LAYER 2
0.1017,
0.1981,
1, 0.07366, # CONES, ZTHICK OF LAYER 3
0.1982,
0.2667,
1, 0.07874, # CONES, ZTHICK OF LAYER 4
0.2668,
0.3327,
1, 0.07366, # CONES, ZTHICK OF LAYER 5
0.3328,
0.4064,
1, 0.1168, # CONES, ZTHICK OF LAYER 6
0.4065,
0.5207,
1, 0.1041, # CONES, ZTHICK OF LAYER 7
0.5208,
0.6299,
1, 0.2007, # CONES, ZTHICK OF LAYER 8
0.63,
0.8712,
1, 0.1854, # CONES, ZTHICK OF LAYER 9
0.8713,
1.1074,
1, 0.1702, # CONES, ZTHICK OF LAYER 10
1.1074,
1.3487,
1, 0.1575, # CONES, ZTHICK OF LAYER 11
1.3488,
1.5951,
1, 0.1448, # CONES, ZTHICK OF LAYER 12
1.5952,
1.8466,
1, 0.1092, # CONES, ZTHICK OF LAYER 13
1.8467,
2.074,
3, 0.01524, # CONES, ZTHICK OF LAYER 14
2.074, 3.429, 3.81,
2.1057, 3.413, 3.81,
3, 0.07366, # CONES, ZTHICK OF LAYER 15
2.1057, 3.4131, 3.81,
2.2352, 3.3354, 3.81,
3, 0.05842, # CONES, ZTHICK OF LAYER 16
2.2353, 3.3354, 3.81,
2.3673, 3.274, 3.81,
3, 0.0508, # CONES, ZTHICK OF LAYER 17
2.3673, 3.2741, 3.81,
2.4968, 3.2205, 3.81,
3, 0.04318, # CONES, ZTHICK OF LAYER 18
2.4969, 3.2206, 3.81,
2.634, 3.175, 3.81,
1, 0.3151, # CONES, ZTHICK OF LAYER 19
3.81,
3.81,
3, 0.00900, # CONES, ZTHICK OF LAYER 20
2.65642, 2.66481, 4.03289,
2.65823, 2.66663, 4.03564,
3, 0.00600, # CONES, ZTHICK OF LAYER 21
2.64983, 2.66663, 4.03564,
2.65103, 2.66784, 4.03747,
3, 0.00900, # CONES, ZTHICK OF LAYER 22
2.65103, 2.67624, 4.03747,
2.65283, 2.67806, 4.04021,
3, 0.00300, # CONES, ZTHICK OF LAYER 23
2.65283, 2.68647, 4.04021,
2.65344, 2.68708, 4.04113,
3, 0.00600, # CONES, ZTHICK OF LAYER 24
2.65344, 2.69549, 4.04113,
2.65464, 2.69671, 4.04296,
3, 0.00300, # CONES, ZTHICK OF LAYER 25
2.64622, 2.69671, 4.04296,
2.64682, 2.69732, 4.04387,
3, 0.01500, # CONES, ZTHICK OF LAYER 26
2.64682, 2.70574, 4.04387,
2.64982, 2.70880, 4.04845,
3, 0.01200, # CONES, ZTHICK OF LAYER 27
2.64139, 2.71722, 4.04845,
2.64378, 2.71968, 4.05211,
3, 0.00600, # CONES, ZTHICK OF LAYER 28
2.63535, 2.72811, 4.05211,
2.63654, 2.72935, 4.05394,
3, 0.00300, # CONES, ZTHICK OF LAYER 29
2.63654, 2.73778, 4.05394,
2.63713, 2.73840, 4.05486,
3, 0.00300, # CONES, ZTHICK OF LAYER 30
2.62870, 2.73840, 4.05486,
2.62929, 2.73902, 4.05577,
3, 0.00300, # CONES, ZTHICK OF LAYER 31
2.62085, 2.74746, 4.05577,
2.62144, 2.74808, 4.05669,
3, 0.00300, # CONES, ZTHICK OF LAYER 32
2.62144, 2.75652, 4.05669,
2.62203, 2.75715, 4.05760,
3, 0.00600, # CONES, ZTHICK OF LAYER 33
2.61359, 2.75715, 4.05760,
2.61477, 2.75839, 4.05944,
3, 0.00600, # CONES, ZTHICK OF LAYER 34
2.60632, 2.76684, 4.05944,
2.60749, 2.76809, 4.06127,
3, 0.00600, # CONES, ZTHICK OF LAYER 35
2.59904, 2.77654, 4.06127,
2.60021, 2.77779, 4.06310,
3, 0.00300, # CONES, ZTHICK OF LAYER 36
2.59176, 2.77779, 4.06310,
2.59234, 2.77841, 4.06401,
3, 0.00300, # CONES, ZTHICK OF LAYER 37
2.59234, 2.78687, 4.06401,
2.59292, 2.78750, 4.06493,
3, 0.00300, # CONES, ZTHICK OF LAYER 38
2.58446, 2.78750, 4.06493,
2.58505, 2.78813, 4.06584,
3, 0.00600, # CONES, ZTHICK OF LAYER 39
2.58505, 2.79659, 4.06584,
2.58621, 2.79785, 4.06767,
3, 0.00300, # CONES, ZTHICK OF LAYER 40
2.57774, 2.79785, 4.06767,
2.57833, 2.79848, 4.06859,
3, 0.00600, # CONES, ZTHICK OF LAYER 41
2.56986, 2.80695, 4.06859,
2.57101, 2.80821, 4.07042,
3, 0.00300, # CONES, ZTHICK OF LAYER 42
2.56254, 2.81668, 4.07042,
2.56312, 2.81731, 4.07133,
3, 0.00300, # CONES, ZTHICK OF LAYER 43
2.55465, 2.81731, 4.07133,
2.55522, 2.81795, 4.07225,
3, 0.00300, # CONES, ZTHICK OF LAYER 44
2.53827, 2.82642, 4.07225,
2.53884, 2.82706, 4.07317,
3, 0.00300, # CONES, ZTHICK OF LAYER 45
2.47103, 2.82706, 4.07317,
2.47158, 2.82769, 4.07408,
3, 0.00300, # CONES, ZTHICK OF LAYER 46
2.42919, 2.82769, 4.07408,
2.42973, 2.82833, 4.07500,
3, 0.00300, # CONES, ZTHICK OF LAYER 47
2.40429, 2.83681, 4.07500,
2.40483, 2.83745, 4.07591,
7, 0.00300, # CONES, ZTHICK OF LAYER 48
2.01463, 2.06553, 2.22669, 2.25214, 2.37090, 2.84593, 4.07591,
2.01508, 2.06599, 2.22719, 2.25265, 2.37143, 2.84657, 4.07683,
5, 0.00300, # CONES, ZTHICK OF LAYER 49
1.97266, 2.10841, 2.18477, 2.84657, 4.07683,
1.97310, 2.10889, 2.18526, 2.84721, 4.07774,
3, 0.00300, # CONES, ZTHICK OF LAYER 50
1.92218, 2.84721, 4.07774,
1.92261, 2.84785, 4.07866,
5, 0.00300, # CONES, ZTHICK OF LAYER 51
1.41331, 1.68494, 1.84622, 2.84785, 4.07866,
1.41363, 1.68532, 1.84663, 2.84849, 4.07957,
3, 0.00300, # CONES, ZTHICK OF LAYER 52
1.34571, 2.84849, 4.07957,
1.34601, 2.84912, 4.08049,
5, 0.00300, # CONES, ZTHICK OF LAYER 53
0.87894, 1.15069, 1.27807, 2.84912, 4.08049,
0.87914, 1.15095, 1.27836, 2.84976, 4.08140,
3, 0.00300, # CONES, ZTHICK OF LAYER 54
0.78570, 2.84976, 4.08140,
0.78588, 2.85040, 4.08232,
1, 0.00300, # CONES, ZTHICK OF LAYER 55
0.70092,
0.70108,
1, 0.00300, # CONES, ZTHICK OF LAYER 56
0.61610,
0.61623,
1, 0.00300, # CONES, ZTHICK OF LAYER 57
0.53974,
0.53986,
1, 0.00300, # CONES, ZTHICK OF LAYER 58
0.48035,
0.48045,
1, 0.00300, # CONES, ZTHICK OF LAYER 59
0.43793,
0.43803,
1, 0.00300, # CONES, ZTHICK OF LAYER 60
0.39551,
0.39559,
1, 0.00300, # CONES, ZTHICK OF LAYER 61
0.36156,
0.36165,
1, 0.00300, # CONES, ZTHICK OF LAYER 62
0.32761,
0.32768,
1, 0.00300, # CONES, ZTHICK OF LAYER 63
0.30215,
0.30222,
1, 0.00300, # CONES, ZTHICK OF LAYER 64
0.27668,
0.27674,
1, 0.00300, # CONES, ZTHICK OF LAYER 65
0.24268,
0.24273,
1, 0.00300, # CONES, ZTHICK OF LAYER 66
0.21718,
0.21723,
1, 0.00300, # CONES, ZTHICK OF LAYER 67
0.19167,
0.19172,
1, 0.00300, # CONES, ZTHICK OF LAYER 68
0.15763,
0.15767,
1, 0.00300, # CONES, ZTHICK OF LAYER 69
0.12358,
0.12361,
2, 0.00300, # CONES, ZTHICK OF LAYER 70
0.02984, 0.04688,
0.02984, 0.04690,
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 5,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 4,
AIR700ICRU
0.7, 0.01, 0, 5,
W17GCC700
0.7, 0.01, 0, 5,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 4,
AIR700ICRU
0.7, 0.01, 0, 5,
W17GCC700
0.7, 0.01, 0, 4,
AIR700ICRU
0.7, 0.01, 0, 4,
W17GCC700
0.7, 0.01, 0, 4,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
W17GCC700
0.7, 0.01, 0, 1,
AIR700ICRU
*********** start of CM CHAMBER with identifier CHAMBER  ***********
10.0, RMAX
Monitor chamber model
14.83, ZMIN
0, 13, 0, N_TOP, N_CHM, N_BOT
9.525, 9.95, 10.0, RADII FOR CENTRAL PART
0.0127, 0, ZTHICK, FLAG FOR LAYER 1 IN CENTRAL PART
0.0, 0.0, 6, 6,
KAPTON700ICRU
0.2273, 0, ZTHICK, FLAG FOR LAYER 2 IN CENTRAL PART
0.0, 0.0, 6, 6,
AIR700ICRU
0.0051, 0, ZTHICK, FLAG FOR LAYER 3 IN CENTRAL PART
0.0, 0.0, 6, 6,
KAPTON700ICRU
0.234, 0, ZTHICK, FLAG FOR LAYER 4 IN CENTRAL PART
0.0, 0.0, 6, 6,
AIR700ICRU
0.0051, 0, ZTHICK, FLAG FOR LAYER 5 IN CENTRAL PART
0.0, 0.0, 6, 6,
KAPTON700ICRU
0.229, 0, ZTHICK, FLAG FOR LAYER 6 IN CENTRAL PART
0.0, 0.0, 6, 6,
AIR700ICRU
0.0127, 0, ZTHICK, FLAG FOR LAYER 7 IN CENTRAL PART
0.0, 0.0, 6, 6,
KAPTON700ICRU
0.229, 0, ZTHICK, FLAG FOR LAYER 8 IN CENTRAL PART
0.0, 0.0, 6, 6,
AIR700ICRU
0.0051, 0, ZTHICK, FLAG FOR LAYER 9 IN CENTRAL PART
0.0, 0.0, 6, 6,
KAPTON700ICRU
0.234, 0, ZTHICK, FLAG FOR LAYER 10 IN CENTRAL PART
0.0, 0.0, 6, 6,
AIR700ICRU
0.0051, 0, ZTHICK, FLAG FOR LAYER 11 IN CENTRAL PART
0.0, 0.0, 6, 6,
KAPTON700ICRU
0.227, 0, ZTHICK, FLAG FOR LAYER 12 IN CENTRAL PART
0.0, 0.0, 6, 6,
AIR700ICRU
0.0127, 0, ZTHICK, FLAG FOR LAYER 13 IN CENTRAL PART
0.0, 0.0, 6, 6,
KAPTON700ICRU
0.0, 0.0, 6, 6,   chamber wall
KAPTON700ICRU
0.0, 0.0, 6, 6,   gap
KAPTON700ICRU
0.0, 0.0, 6, 6,   container
KAPTON700ICRU
0, MRNGE
*********** start of CM SLABS with identifier MMIRROR  ***********
10.0, RMAX
Field Light Mirror
1, NSLABS
22.0, ZMIN
0.00508, 0.7, 0.01, 0, 9, 0.0
MYLAR700ICRU
*********** start of CM PYRAMIDS with identifier SHIELD  ***********
50.0, RMAX
Generic Varian shielding model
1, 0, #LAYERS, AIR OUTSIDE
24.2, 27.0, 5.97, 5.97, -5.97, -5.97, 5.97, 5.97, -5.97, -5.97, 20.0, 20.0,
0.7, 0.01, 1, 2,  ECUT ETC. FOR AIR
0.7, 0.01, 1, 3,
PB700ICRU
*********** start of CM SYNCJAWS with identifier JAWS  ***********
57.34, RMAX
SYNCJAW settings
2, 2, # PAIRED BARS OR JAWS, field type
Y
X
{{jaws_file}}
0.7, 0.01, 1, 0,
0.7, 0.01, 1, 0,
WJAWS700
0.7, 0.01, 1, 0,
WJAWS700
{mlc_template}
*********** start of CM SLABS with identifier AIRSLAB ***********
30, RMAX
airslab
1, NSLABS
60.0, ZMIN
{{filler_depth}}, 0.7, 0.01, 0, 0, 0
AIR700ICRU
*********************end of all CMs*****************************
 #########################
 :Start MC Transport Parameter:

 Global ECUT= 0.7
 Global PCUT= 0.01
 Global SMAX= 10000000000.
 ESTEPE= 0.25
 XIMAX= 0.5
 Boundary crossing algorithm= EXACT
 Skin depth for BCA= 3.
 Electron-step algorithm= PRESTA-II
 Spin effects= On
 Brems angular sampling= KM
 Brems cross sections= NRC
 Bound Compton scattering= Off
 Compton cross sections= default
 Pair angular sampling= Simple
 Pair cross sections= NRC
 Photoelectron angular sampling= Off
 Rayleigh scattering= Off
 Atomic relaxations= Off
 Electron impact ionization= Off
 Photon cross sections= xcom
 Photon cross-sections output= Off

 :Stop MC Transport Parameter:
 #########################
 :Start DBS rejection plane:

 Use a rejection plane= On
 Z(cm) from zero reference plane= {{dbs_rejection}}

 :Stop DBS rejection plane:
 #########################
