{title}
1
H2O700ICRU
0.7, 0.01, 0, 0
-1, -1, -1, 1
{phantom_neg_x}
{vox_size}, {num_vox_x}
{phantom_neg_y}
{vox_size}, {num_vox_y}
{phantom_depth}
{depth_vox_size}, 3
0, 0, 0, 0, 0, 0, 0, 0
0, 0, 0, 0, 0, 0, 0, 0
0, 0, 0, 0, 0, 0, 0, 1
2, 20, 2, 0, 0, 0, 0, 50, 0, 0
0, 0, 0, 180.0, 0.0, 0.0, 0.0, 0.0
0, 0, 0, 180.0, 0.0, 0.0, 0.0, 1.0
2, 0, 1, 5, 1, 5, 20, {phantom_depth}
{beam_model},{model_path}/{name}_beam_out.egsphsp1,{name}_beam
{nhist}, 0, 99, 33, 97, 100.0, 0, 0, 1, 1, 1.0, 0, 0, 0, 50, 1, 0
 #########################
 :Start MC Transport Parameter:

 Global ECUT= 0.7
 Global PCUT= 0.01
 Global SMAX= 5.
 ESTEPE= 0.25
 XIMAX= 0.5
 Boundary crossing algorithm= EXACT
 Skin depth for BCA= 3.
 Electron-step algorithm= PRESTA-II
 Spin effects= On
 Brems angular sampling= KM
 Brems cross sections= BH
 Bound Compton scattering= Off
 Compton cross sections= default
 Pair angular sampling= Simple
 Pair cross sections= BH
 Photoelectron angular sampling= Off
 Rayleigh scattering= Off
 Atomic relaxations= Off
 Electron impact ionization= Off
 Photon cross-sections output= Off

 :Stop MC Transport Parameter:
 #########################
