GVarianStat
AIR700ICRU
0, 0, 0, 0, 1, 3, 0,  IWATCH ETC.
{{nhist}}, 533, 769, 1000, 0, 0, 0, 0,  NCASE ETC.
0, 31, 1, 0, 0, 0, 0, 0, 0, 0, IQIN, ISOURCE + OPTIONS
{{stats_model}}
0, 0, 0.7, 0.01, 0, -1, 2.0, 0, ECUT,PCUT,IREJCT,ESAVE
0, 1, 1, 1, 7,  PHOTON FORCING
1, 6,  SCORING INPUT
1, 1
30.0,
0,  DOSE COMPONENTS
{{z_phsp}}, Z TO FRONT FACE
*********** start of CM SLABS with identifier PREJAWS  ***********
15.0, RMAX
air before jaws
1, NSLABS
{{z_phsp}}, ZMIN
0.1, 0.7, 0.01, 0, 0, 0
AIR700ICRU
*********** start of CM SYNCJAWS with identifier JAWS  ***********
57.34, RMAX
SYNCJAW settings
2, 1, # PAIRED BARS OR JAWS, field type
Y
X
{{jaws_file}}
0.7, 0.01, 0, 0,
0.7, 0.01, 0, 0,
WJAWS700
0.7, 0.01, 0, 0,
WJAWS700
*********** start of CM CONESTAK with identifier BASEPLT  ***********
57.34, RMAX
Baseplate (0.6 inch) approximated as cylinders
45.176, 15.24, ZMIN, RBN
1, NUMBER OF LAYERS
1.524, 15.24, 15.24, 
0.7, 0.01, 0, 0, OUTER WALL
BPLATE700
0.7, 0.01, 0, 0, 
AIR700ICRU
0.7, 0.01, 0, 0, 
BPLATE700
*********** start of CM SYNCHDMLC with identifier MLC  ***********
{mlc_template}
*********** start of CM SLABS with identifier MYLAR  ***********
30, RMAX
Mylar film
1, NSLABS
55.6, ZMIN
0.01016, 0.7, 0.01, 0, 0, 0
MYLAR700ICRU
*********** start of CM SLABS with identifier AIRSLAB ***********
30, RMAX
airslab
1, NSLABS
59.99, ZMIN
{{filler_depth}}, 0.7, 0.01, 0, 0, 0
AIR700ICRU
*********************end of all CMs*****************************
 #########################
 :Start MC Transport Parameter:

 Global ECUT= 0.7
 Global PCUT= 0.01
 Global SMAX= 10000000000.
 ESTEPE= 0.25
 XIMAX= 0.5
 Boundary crossing algorithm= EXACT
 Skin depth for BCA= 3.
 Electron-step algorithm= PRESTA-II
 Spin effects= On
 Brems angular sampling= KM
 Brems cross sections= NRC
 Bound Compton scattering= Off
 Compton cross sections= default
 Pair angular sampling= Simple
 Pair cross sections= NRC
 Photoelectron angular sampling= Off
 Rayleigh scattering= Off
 Atomic relaxations= Off
 Electron impact ionization= Off
 Photon cross sections= xcom
 Photon cross-sections output= Off

 :Stop MC Transport Parameter:
 #########################
