18MV Linac
AIR700ICRU
0, 0, 0, 0, 1, 3, 0, IWATCH ETC.
{{nhist}}, 533, 769, 1000, 2, 1000, 0, 0,  NCASE ETC.
{{dbs_radius}}, 100, 4, 70, 1, 13.525,  DIRECTIONAL BREM OPTIONS
-1, 19, -{{e_fwhm}}, 0.0, 0.0, 1.0, 0.15, -{{e_fwhm}}, 0.0, 0.0,  IQIN, ISOURCE + OPTIONS
0,  MONOENERGETIC
{{e_energy}}
0, 0, 0.7, 0.01, 0, -1, 2.0, 0,  ECUT,PCUT,IREJCT,ESAVE
0, 1, 1, 1, 7,  PHOTON FORCING
1, 11,  SCORING INPUT
1, 1,
30.0,
0,  DOSE COMPONENTS
0, Z TO FRONT FACE
*********** start of CM SLABS with identifier TARGET  ***********
3.0, RMAX
Target and backing
3, n_slabs
0, distance
0.0635, 0.7, 0.01, 0, 1, 0
WTARGET700
1.016, 0.7, 0.01, 0, 2, 0
CU700ICRU
0.4205, 0.7, 0.01, 0, 0, 0
VACUUM
*********** start of CM CONS3R with identifier PRIMCOLL  ***********
3.81, RMAX
Primary Collimator
1.5, ZMIN
6.1, ZTHICK
2, NUM_NODE
1.5, 0.6,
7.6, 2.1,
0.7, 0.01, 0, 0, 0,
VACUUM
0.7, 0.01, 0, 3, 0,
WPRIMCOLL700
*********** start of CM SLABS with identifier WINDOW  ***********
3.81, RMAX
Vacuum Window
2, n_slabs
7.6, distance
1.2954, 0.7, 0.01, 0, 0, 5.0
VACUUM
0.0254, 0.7, 0.01, 0, 8, 5.0
BE700ICRU
*********** start of CM FLATFILT with identifier FLATFILT  ***********
3.81, RMAX
15X Flattening Filter
9.2676, ZMIN
69, NUMBER OF LAYERS
1, 0.00508, # CONES, ZTHICK OF LAYER 1, ymax = 1.3656, ymin = 1.3636
0.00000,
0.03048,
1, 0.00762, # CONES, ZTHICK OF LAYER 2, ymax = 1.3636, ymin = 1.3606
0.03048,
0.06350,
1, 0.01245, # CONES, ZTHICK OF LAYER 3, ymax = 1.3606, ymin = 1.3557
0.06350,
0.08382,
1, 0.01499, # CONES, ZTHICK OF LAYER 4, ymax = 1.3557, ymin = 1.3498
0.08382,
0.10160,
1, 0.02286, # CONES, ZTHICK OF LAYER 5, ymax = 1.3498, ymin = 1.3408
0.10160,
0.12700,
1, 0.02007, # CONES, ZTHICK OF LAYER 6, ymax = 1.3408, ymin = 1.3329
0.12700,
0.14732,
1, 0.03048, # CONES, ZTHICK OF LAYER 7, ymax = 1.3329, ymin = 1.3209
0.14732,
0.17272,
1, 0.02489, # CONES, ZTHICK OF LAYER 8, ymax = 1.3209, ymin = 1.3111
0.17272,
0.19050,
1, 0.09525, # CONES, ZTHICK OF LAYER 9, ymax = 1.3111, ymin = 1.2736
0.19050,
0.22860,
1, 0.06579, # CONES, ZTHICK OF LAYER 10, ymax = 1.2736, ymin = 1.2477
0.22860,
0.25400,
1, 0.13284, # CONES, ZTHICK OF LAYER 11, ymax = 1.2477, ymin = 1.1954
0.25400,
0.31750,
1, 0.09982, # CONES, ZTHICK OF LAYER 12, ymax = 1.1954, ymin = 1.1561
0.31750,
0.38100,
1, 0.08407, # CONES, ZTHICK OF LAYER 13, ymax = 1.1561, ymin = 1.123
0.38100,
0.44450,
1, 0.07137, # CONES, ZTHICK OF LAYER 14, ymax = 1.123, ymin = 1.0949
0.44450,
0.50800,
1, 0.13716, # CONES, ZTHICK OF LAYER 15, ymax = 1.0949, ymin = 1.0409
0.50800,
0.63500,
1, 0.11709, # CONES, ZTHICK OF LAYER 16, ymax = 1.0409, ymin = 0.9948
0.63500,
0.76200,
1, 0.09398, # CONES, ZTHICK OF LAYER 17, ymax = 0.9948, ymin = 0.9578
0.76200,
0.88900,
1, 0.01803, # CONES, ZTHICK OF LAYER 18, ymax = 0.9578, ymin = 0.9507
0.88900,
0.91440,
1, 0.01016, # CONES, ZTHICK OF LAYER 19, ymax = 0.9507, ymin = 0.9467
0.91440,
0.93980,
1, 0.01016, # CONES, ZTHICK OF LAYER 20, ymax = 0.9467, ymin = 0.9427
0.93980,
0.96520,
1, 0.01016, # CONES, ZTHICK OF LAYER 21, ymax = 0.9427, ymin = 0.9387
0.96520,
0.99060,
1, 0.02743, # CONES, ZTHICK OF LAYER 22, ymax = 0.9387, ymin = 0.9279
0.99060,
1.01600,
1, 0.02794, # CONES, ZTHICK OF LAYER 23, ymax = 0.9279, ymin = 0.9169
1.01600,
1.04140,
1, 0.02794, # CONES, ZTHICK OF LAYER 24, ymax = 0.9169, ymin = 0.9059
1.04140,
1.06680,
1, 0.04724, # CONES, ZTHICK OF LAYER 25, ymax = 0.9059, ymin = 0.8873
1.06680,
1.09220,
1, 0.09398, # CONES, ZTHICK OF LAYER 26, ymax = 0.8873, ymin = 0.8503
1.09220,
1.14300,
1, 0.10211, # CONES, ZTHICK OF LAYER 27, ymax = 0.8503, ymin = 0.8101
1.14300,
1.20650,
1, 0.10160, # CONES, ZTHICK OF LAYER 28, ymax = 0.8101, ymin = 0.7701
1.20650,
1.27000,
1, 0.19812, # CONES, ZTHICK OF LAYER 29, ymax = 0.7701, ymin = 0.6921
1.27000,
1.39700,
1, 0.15773, # CONES, ZTHICK OF LAYER 30, ymax = 0.6921, ymin = 0.63
1.39700,
1.52400,
1, 0.13995, # CONES, ZTHICK OF LAYER 31, ymax = 0.63, ymin = 0.5749
1.52400,
1.65100,
1, 0.12675, # CONES, ZTHICK OF LAYER 32, ymax = 0.5749, ymin = 0.525
1.65100,
1.77775,
2, 0.00025, # CONES, ZTHICK OF LAYER 33, ymax = 0.525, ymin = 0.5249
0.00000, 1.77775,
0.00025, 1.77800,
2, 0.11963, # CONES, ZTHICK OF LAYER 34, ymax = 0.5249, ymin = 0.4778
0.00025, 1.77800,
0.11989, 1.90500,
2, 0.13183, # CONES, ZTHICK OF LAYER 35, ymax = 0.4778, ymin = 0.4259
0.11989, 1.90500,
0.25171, 2.03200,
2, 0.13970, # CONES, ZTHICK OF LAYER 36, ymax = 0.4259, ymin = 0.3709
0.25171, 2.03200,
0.39141, 2.15900,
2, 0.14478, # CONES, ZTHICK OF LAYER 37, ymax = 0.3709, ymin = 0.3139
0.39141, 2.15900,
0.53619, 2.28600,
2, 0.14986, # CONES, ZTHICK OF LAYER 38, ymax = 0.3139, ymin = 0.2549
0.53619, 2.28600,
0.68605, 2.41300,
2, 0.14986, # CONES, ZTHICK OF LAYER 39, ymax = 0.2549, ymin = 0.1959
0.68605, 2.41300,
0.83591, 2.54000,
2, 0.14986, # CONES, ZTHICK OF LAYER 40, ymax = 0.1959, ymin = 0.1369
0.83591, 2.54000,
0.98577, 2.66700,
2, 0.10998, # CONES, ZTHICK OF LAYER 41, ymax = 0.1369, ymin = 0.0936
0.98577, 2.66700,
1.09576, 2.79400,
2, 0.23774, # CONES, ZTHICK OF LAYER 42, ymax = 0.0936, ymin = 0.0
1.09576, 3.81000,
1.33350, 3.81000,
2, 0.06350, # CONES, ZTHICK OF LAYER 69, ymax = 0.0, ymin = -0.025
3.55600, 3.81000,
3.55600, 3.81000,
1, 0.15443, # CONES, ZTHICK OF LAYER 68, ymax = 0.0608, ymin = 0.0
3.81000,
3.81000,
3, 0.02489, # CONES, ZTHICK OF LAYER 67, ymax = 0.0706, ymin = 0.0608
2.79400, 3.42900, 3.81000,
2.51460, 3.45493, 3.81000,
3, 0.02388, # CONES, ZTHICK OF LAYER 66, ymax = 0.08, ymin = 0.0706
2.51460, 3.45493, 3.81000,
2.44342, 3.47980, 3.81000,
1, 0.01702, # CONES, ZTHICK OF LAYER 65, ymax = 0.0867, ymin = 0.08
2.44342,
2.39268,
1, 0.07137, # CONES, ZTHICK OF LAYER 64, ymax = 0.1148, ymin = 0.0867
2.39268,
2.27076,
1, 0.09398, # CONES, ZTHICK OF LAYER 63, ymax = 0.1518, ymin = 0.1148
2.27076,
2.14884,
1, 0.10414, # CONES, ZTHICK OF LAYER 62, ymax = 0.1928, ymin = 0.1518
2.14884,
2.02946,
1, 0.10922, # CONES, ZTHICK OF LAYER 61, ymax = 0.2358, ymin = 0.1928
2.02946,
1.90754,
1, 0.09373, # CONES, ZTHICK OF LAYER 60, ymax = 0.2727, ymin = 0.2358
1.90754,
1.78816,
1, 0.03277, # CONES, ZTHICK OF LAYER 59, ymax = 0.2856, ymin = 0.2727
1.78816,
1.73199,
3, 0.00762, # CONES, ZTHICK OF LAYER 58, ymax = 0.2886, ymin = 0.2856
0.83058, 0.94996, 1.73199,
0.71120, 1.00965, 1.71893,
3, 0.00762, # CONES, ZTHICK OF LAYER 57, ymax = 0.2916, ymin = 0.2886
0.71120, 1.00965, 1.71893,
0.66004, 1.06934, 1.70586,
3, 0.01016, # CONES, ZTHICK OF LAYER 56, ymax = 0.2956, ymin = 0.2916
0.66004, 1.06934, 1.70586,
0.59182, 1.14893, 1.68845,
3, 0.00508, # CONES, ZTHICK OF LAYER 55, ymax = 0.2976, ymin = 0.2956
0.59182, 1.14893, 1.68845,
0.55844, 1.18872, 1.67974,
3, 0.00787, # CONES, ZTHICK OF LAYER 54, ymax = 0.3007, ymin = 0.2976
0.55844, 1.18872, 1.67974,
0.50669, 1.23441, 1.66624,
3, 0.00483, # CONES, ZTHICK OF LAYER 53, ymax = 0.3026, ymin = 0.3007
0.50669, 1.23441, 1.66624,
0.47498, 1.26241, 1.65484,
3, 0.00787, # CONES, ZTHICK OF LAYER 52, ymax = 0.3057, ymin = 0.3026
0.47498, 1.26241, 1.65484,
0.42211, 1.30810, 1.63625,
3, 0.00991, # CONES, ZTHICK OF LAYER 51, ymax = 0.3096, ymin = 0.3057
0.42211, 1.30810, 1.63625,
0.35560, 1.33286, 1.61285,
3, 0.00533, # CONES, ZTHICK OF LAYER 50, ymax = 0.3117, ymin = 0.3096
0.35560, 1.33286, 1.61285,
0.33281, 1.34620, 1.60025,
3, 0.01295, # CONES, ZTHICK OF LAYER 49, ymax = 0.3168, ymin = 0.3117
0.33281, 1.34620, 1.60025,
0.27746, 1.37160, 1.56966,
3, 0.00965, # CONES, ZTHICK OF LAYER 48, ymax = 0.3206, ymin = 0.3168
0.27746, 1.37160, 1.56966,
0.23622, 1.38352, 1.54686,
3, 0.01092, # CONES, ZTHICK OF LAYER 47, ymax = 0.3249, ymin = 0.3206
0.23622, 1.38352, 1.54686,
0.19055, 1.39700, 1.51519,
3, 0.01448, # CONES, ZTHICK OF LAYER 46, ymax = 0.3306, ymin = 0.3249
0.19055, 1.39700, 1.51519,
0.13000, 1.41185, 1.47320,
3, 0.00254, # CONES, ZTHICK OF LAYER 45, ymax = 0.3316, ymin = 0.3306
0.13000, 1.41185, 1.47320,
0.11938, 1.41445, 1.46558,
3, 0.01270, # CONES, ZTHICK OF LAYER 44, ymax = 0.3366, ymin = 0.3316
0.11938, 1.41445, 1.46558,
0.07346, 1.42748, 1.42748,
1, 0.02032, # CONES, ZTHICK OF LAYER 43, ymax = 0.3446, ymin = 0.3366
0.07346,
0.00000,
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
TATA700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
TATA700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
TATA700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
TATA700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
TATA700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
TATA700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
TATA700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
TATA700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
TATA700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
TATA700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1,
SAE12L14
0.7, 0.01, 0, 1,
AIR700ICRU
*********** start of CM CHAMBER with identifier CHAMBER  ***********
4.5, RMAX
Monitor chamber Kapton
14.83, ZMIN
0, 13, 0, N_TOP, N_CHM, N_BOT
9.525, 9.95, 10.0, RADII FOR CENTRAL PART
0.0127, 0, ZTHICK, FLAG FOR LAYER 1 IN CENTRAL PART
0.0, 0.0, 0, 6, 
KAPTON700ICRU
0.2273, 0, ZTHICK, FLAG FOR LAYER 2 IN CENTRAL PART
0.0, 0.0, 0, 6, 
AIR700ICRU
0.0051, 0, ZTHICK, FLAG FOR LAYER 3 IN CENTRAL PART
0.0, 0.0, 0, 6, 
KAPTON700ICRU
0.234, 0, ZTHICK, FLAG FOR LAYER 4 IN CENTRAL PART
0.0, 0.0, 0, 6, 
AIR700ICRU
0.0051, 0, ZTHICK, FLAG FOR LAYER 5 IN CENTRAL PART
0.0, 0.0, 0, 6, 
KAPTON700ICRU
0.229, 0, ZTHICK, FLAG FOR LAYER 6 IN CENTRAL PART
0.0, 0.0, 0, 6, 
AIR700ICRU
0.0127, 0, ZTHICK, FLAG FOR LAYER 7 IN CENTRAL PART
0.0, 0.0, 0, 6, 
KAPTON700ICRU
0.229, 0, ZTHICK, FLAG FOR LAYER 8 IN CENTRAL PART
0.0, 0.0, 0, 6, 
AIR700ICRU
0.0051, 0, ZTHICK, FLAG FOR LAYER 9 IN CENTRAL PART
0.0, 0.0, 0, 6, 
KAPTON700ICRU
0.234, 0, ZTHICK, FLAG FOR LAYER 10 IN CENTRAL PART
0.0, 0.0, 0, 6, 
AIR700ICRU
0.0051, 0, ZTHICK, FLAG FOR LAYER 11 IN CENTRAL PART
0.0, 0.0, 0, 6, 
KAPTON700ICRU
0.227, 0, ZTHICK, FLAG FOR LAYER 12 IN CENTRAL PART
0.0, 0.0, 0, 6, 
AIR700ICRU
0.0127, 0, ZTHICK, FLAG FOR LAYER 13 IN CENTRAL PART
0.0, 0.0, 0, 6, 
KAPTON700ICRU
0.0, 0.0, 0, 6,   chamber wall
KAPTON700ICRU
0.0, 0.0, 0, 6,   gap
KAPTON700ICRU
0.0, 0.0, 0, 6,   container
KAPTON700ICRU
0, MRNGE
*********** start of CM FLATFILT with identifier SHIELD  ***********
15.0, RMAX
Field Light Mirror
21.0, ZMIN
3, NUMBER OF LAYERS
1, 6.0,
5.1975,
6.6822,
1, 0.5,
6.75,
6.75,
1, 0.0051,
15.0,
15.0,
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1, start of layer 2
PB700ICRU
0.7, 0.01, 0, 1,
AIR700ICRU
0.7, 0.01, 0, 1, start of layer 3
ESTEEL700
0.7, 0.01, 0, 1,
MYLAR700ICRU
0.7, 0.01, 0, 1, start of layer 4
AIR700ICRU
*********** start of CM SYNCJAWS with identifier JAWS  ***********
57.34, RMAX
SYNCJAW settings
2, {{delivery_mode}}, # PAIRED BARS OR JAWS, field type
Y
X
{{jaws_file}}
0.7, 0.01, 0, 0,
0.7, 0.01, 0, 0,
WJAWS700
0.7, 0.01, 0, 0,
WJAWS700
*********** start of CM CONESTAK with identifier BASEPLT  ***********
57.34, RMAX
Baseplate (0.6 inch) approximated as cylinders
45.176, 15.24, ZMIN, RBN
1, NUMBER OF LAYERS
1.524, 15.24, 15.24, 
0.7, 0.01, 2, 0, OUTER WALL
BPLATE700
0.7, 0.01, 1, 0, 
AIR700ICRU
0.7, 0.01, 3, 0, 
BPLATE700
{mlc_template}
*********** start of CM SLABS with identifier MYLAR  ***********
30, RMAX
Mylar film
1, NSLABS
55.6, ZMIN
0.01016, 0.7, 0.01, 0, 0, 0
MYLAR700ICRU
*********** start of CM SLABS with identifier AIRSLAB ***********
30, RMAX
airslab
1, NSLABS
59.99, ZMIN
{{filler_depth}}, 0.7, 0.01, 0, 0, 0
AIR700ICRU
*********************end of all CMs*****************************
 #########################
 :Start MC Transport Parameter:

 Global ECUT= 0.7
 Global PCUT= 0.01
 Global SMAX= 10000000000.
 ESTEPE= 0.25
 XIMAX= 0.5
 Boundary crossing algorithm= EXACT
 Skin depth for BCA= 3.
 Electron-step algorithm= PRESTA-II
 Spin effects= On
 Brems angular sampling= KM
 Brems cross sections= NRC
 Bound Compton scattering= Off
 Compton cross sections= default
 Pair angular sampling= Simple
 Pair cross sections= NRC
 Photoelectron angular sampling= Off
 Rayleigh scattering= Off
 Atomic relaxations= Off
 Electron impact ionization= Off
 Photon cross sections= xcom
 Photon cross-sections output= Off

 :Stop MC Transport Parameter:
 #########################
 :Start DBS rejection plane:

 Use a rejection plane= On
 Z(cm) from zero reference plane= {{dbs_rejection}}

 :Stop DBS rejection plane:
 #########################
