{title}
1
AIR700ICRU
0.7, 0.01, 0, 0
-1, -1, -1, 1
-0.125
0.25, 1
-25.0
0.25, 200
4.975
0.05, 1
1, 1, 1, 200, 1, 1, 1, 1
0, 0, 0, 0, 0, 0, 0, 0
0, 0, 0, 0, 0, 0, 0, 0
0, 0, 0, 0, 0, 0, 0, 1
2, 21, 2, 1, 50, 0
0, 0, 0, 180.0, 0.0, 0.0, 0.0, 0.0
0, 0, 0, 180.0, 0.0, 0.0, 0.0, 1.0
2, 0, 1, 24.875, 1, 0, 20, 4.975
{beam_model},{name}_beam,{pegs_file},0,0
{nhist}, 0, 99, 33, 97, 100.0, 0, 0, 1, 1, 1.0, 0, 0, 0, 0, 1, 0
 #########################
 :Start MC Transport Parameter:

 Global ECUT= 0.7
 Global PCUT= 0.01
 Global SMAX= 5.
 ESTEPE= 0.25
 XIMAX= 0.5
 Boundary crossing algorithm= EXACT
 Skin depth for BCA= 3.
 Electron-step algorithm= PRESTA-II
 Spin effects= On
 Brems angular sampling= KM
 Brems cross sections= BH
 Bound Compton scattering= Off
 Compton cross sections= default
 Pair angular sampling= Simple
 Pair cross sections= BH
 Photoelectron angular sampling= Off
 Rayleigh scattering= Off
 Atomic relaxations= Off
 Electron impact ionization= Off
 Photon cross sections= xcom
 Photon cross-sections output= Off

 :Stop MC Transport Parameter:
 #########################