Tomotherapy unit sim for comparing to 85 SSD 50 mm field width                   #!GUI1.0
AIR700ICRU
0, 0, 0, 0, 1, 3, 0,  IWATCH ETC.
523123, 15, 55, 111, 2, 500, 0, 0,  NCASE ETC.
3.4e+1, 85, 2, 14, 0, 0.38,  DIRECTIONAL BREM OPTIONS
-1, 19, -0.06, 0, 0, 0, 0, -0.06, 0.0, 0.0,  IQIN, ISOURCE + OPTIONS
0, MONOENERGETIC
5.50
0, 0, 0.7, 0.01, 0, -1, 1.0,  0 , ECUT,PCUT,IREJCT,ESAVE
0, 1, 20, 2, 2,  PHOTON FORCING
1, 8,  SCORING INPUT
1, 1
30,
1,  DOSE COMPONENTS
0, 1
0
0
0, Z TO FRONT FACE
*********** start of CM SLABS with identifier slab  ***********
5, RMAX
slab in case needed
1, NSLABS
0.0, ZMIN
0.0, 0.7, 0.01, 0, 0, 0
AIR700ICRU
*********** start of CM FLATFILT with identifier flat  ***********
3.455, RMAX
target portion of tomo
-0.0, ZMIN
13, NUMBER OF LAYERS
1, 0.0051, # CONES, ZTHICK OF LAYER 1
0.396,
0.396,
1, 0.113, # CONES, ZTHICK OF LAYER 2
0.3945,
0.3945,
1, 0.146, # CONES, ZTHICK OF LAYER 3
0.3695,
0.3695,
1, 0.1, # CONES, ZTHICK OF LAYER 4
0.3945,
0.3945,
1, 0.025, # CONES, ZTHICK OF LAYER 5
1.695,
1.695,
2, 0.444, # CONES, ZTHICK OF LAYER 6
0.318, 1.695,
0.318, 1.695,
2, 0.0178, # CONES, ZTHICK OF LAYER 7
0.6995, 1.695,
0.6995, 1.695,
3, 0.0889, # CONES, ZTHICK OF LAYER 8
0.635, 0.692, 1.695,
0.635, 0.692, 1.695,
3, 0.1016, # CONES, ZTHICK OF LAYER 9
0.593, 0.692, 1.695,
0.593, 0.692, 1.695,
3, 0.4775, # CONES, ZTHICK OF LAYER 10
0.682, 0.692, 1.695,
0.682, 0.692, 1.695,
3, 0.0508, # CONES, ZTHICK OF LAYER 11
0.9404, 0.959, 1.695,
0.9455, 0.959, 1.695,
3, 0.347, # CONES, ZTHICK OF LAYER 12
0.948, 0.959, 1.695,
0.948, 0.959, 1.695,
2, 0.032, # CONES, ZTHICK OF LAYER 13
1.05, 1.695,
1.05, 1.695,
0.7, 0.01, 0, 0,
MILDSTEEL700
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 2,
H2O700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 1,
W700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 3,
H2O700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 0,
STEEL700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 4,
STEEL700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 0,
STEEL700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 0,
AL700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 0,
STEEL700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 0,
AL700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 0,
STEEL700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 5,
AL700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 6,
STEEL700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 0,
AL700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 0,
STEEL700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 7,
AL700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 8,
STEEL700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 0,
STEEL700ICRU
0.7, 0.01, 0, 0,
AIR700ICRU
*********** start of CM PYRAMIDS with identifier prim  ***********
8, RMAX
rest of primary collimator
4, 0, #LAYERS, AIR OUTSIDE
1.9505, 2.5375, 0.193, 0.2107, -0.193, -0.2107, 0.6015, 0.7416, -0.6015, -0.7416, 0.9, 0.9,
2.5476, 3.096, 0.2107, 0.2267, -0.2107, -0.2267, 0.7416, 0.8774, -0.7416, -0.8774, 1.55, 1.55,
3.107, 3.791, 0.2267, 0.2467, -0.2267, -0.2467, 0.8774, 1.0464, -0.8774, -1.0464, 2.337, 2.337,
3.802, 5.3072, 0.2467, 0.2905, -0.2467, -0.2905, 1.0464, 1.4175, -1.0464, -1.4175, 8, 8,
0.7, 0.01, 0, 0,  ECUT ETC. FOR AIR
0, 0, 0, 9,
W700ICRU
0, 0, 0, 10,
W700ICRU
0, 0, 0, 11,
W700ICRU
0, 0, 0, 12,
W700ICRU
*********** start of CM CHAMBER with identifier ion  ***********
8, RMAX
ion_chamber
5.3173, ZMIN
2, 1, 1, N_TOP, N_CHM, N_BOT
0.2, 1.9897, 0, ZTHICK, RCYS, FLAG FOR LAYER 1 IN TOP
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 0,
W700ICRU
0.1, 1.9897, 0, ZTHICK, RCYS, FLAG FOR LAYER 2 IN TOP
0.7, 0.01, 0, 13,
W700ICRU
0.7, 0.01, 0, 0,
W700ICRU
4.214, 4.214, 5.6164, RADII FOR CENTRAL PART
1.24, 0, ZTHICK, FLAG FOR LAYER 1 IN CENTRAL PART
0.7, 0.01, 0, 0,
AIR700ICRU
0.7, 0.01, 0, 0,   chamber wall
AIR700ICRU
0.7, 0.01, 0, 0,   gap
AIR700ICRU
0.7, 0.01, 0, 14,   container
W700ICRU
0.3, 5.616, 0, ZTHICK, RCYS, FLAG FOR LAYER 1 IN BOTTOM PART
0.7, 0.01, 0, 15,
STEEL700ICRU
0.7, 0.01, 0, 0,
STEEL700ICRU
0, MRNGE
*********** start of CM PYRAMIDS with identifier jaw  ***********
15, RMAX
temp jaw representation
1, 0, #LAYERS, AIR OUTSIDE
7.1773, 22.694, 0.039, 0.184, -0.039, -0.184, 1.83, 5.39, -1.83, -5.39, 14, 14,
0.7, 0.01, 0, 0,  ECUT ETC. FOR AIR
0, 0, 0, 16,
W700ICRU
*********** start of CM SYNCVMLC with identifier mlc  ***********
15, RMAX
Tomo MLC
1, 1, 2, ORIENT, NGROUP, MODE
22.912, ZMIN
10.0, ZTHICK
0.165, 0.03, 0.03, 0.03, 0.135, 0.135, 22.912, 22.912, 26.052, 26.152, 27.912, 27.922, 2.0, 32.912, 32.912,
0.165, 0.03, 0.03, 0.03, 0.135, 0.135, 22.912, 22.912, 25.95, 26.0, 2.0, 26.05, 26.051, 32.912, 32.912,
0.165, 0.03, 0.03, 0.03, 0.135, 0.135, 22.912, 22.912, 26.052, 26.152, 27.912, 27.922, 2.0, 32.912, 32.912,
66, 2
-5.6291, START
0.0047, LEAFGAP
0, ENDTYPE
10, ZFOCUS or RADIUS of leaf ends
0, ZFOCUS of leaf sides
{mlc_file}
0.7, 0.01, 1, 0
AIR700ICRU
2, 0.01, 2, 0, 0
W700ICRU
2, 0.01, 3, 0
W700ICRU
*********** start of CM BLOCK with identifier blk  ***********
20, RMAX
temp
34.63, 37.124, -999, ZMIN, ZMAX, ZFOCUS
1, # OF SUBREGIONS
4, NUMBER OF POINTS IN SUBREGION 1
-1.398, -9.475,
1.398, -9.475,
1.398, 9.475,
-1.398, 9.475,
7.5, 12.7, -7.5, -12.7,
0.7, 0.01, 0, 0,
0.7, 0.01, 0, 19,
AIR700ICRU
0.7, 0.01, 0, 20,
PB700ICRU
*********** start of CM SLABS with identifier air ***********
30, RMAX
slab a
1, NSLABS
39.0, ZMIN
1.11, 0.7, 0.01, 0, 0, 0
AIR700ICRU
*********************end of all CMs*****************************
 #########################
 :Start MC Transport Parameter:

 Global ECUT= 0.7
 Global PCUT= 0.01
 Global SMAX= 10000000000.
 ESTEPE= 0.25
 XIMAX= 0.5
 Boundary crossing algorithm= EXACT
 Skin depth for BCA= 3.
 Electron-step algorithm= PRESTA-II
 Spin effects= On
 Brems angular sampling= KM
 Brems cross sections= NRC
 Bound Compton scattering= Off
 Compton cross sections= default
 Pair angular sampling= Simple
 Pair cross sections= NRC
 Photoelectron angular sampling= Off
 Rayleigh scattering= Off
 Atomic relaxations= Off
 Electron impact ionization= Off
 Photon cross sections= xcom
 Photon cross-sections output= Off

 :Stop MC Transport Parameter:
 #########################
