DummySource
AIR700ICRU
0, 0, 0, 0, 1, 3, 0,  IWATCH ETC.
{nhist}, 533, 769, 1000, 0, 0, 0, 0,  NCASE ETC.
-1, 19, -0.125, 0.0, 0.0, 1.0, 0.15, -0.10, 0.0, 0.0,  IQIN, ISOURCE + OPTIONS
0, MONOENERGETIC
5.9
0, 0, 0.7, 0.01, 0, -2, 2.0,  0 , ECUT,PCUT,IREJCT,ESAVE
0, 1, 1, 1, 6,  PHOTON FORCING
1, 5,  SCORING INPUT
1, 0
30.0,
0,  DOSE COMPONENTS
26.7, Z TO FRONT FACE
*********** start of CM SYNCJAWS with identifier JAWS  ***********
25.0, RMAX
SYNCJAW settings
2, {delivery_mode}, # PAIRED BARS OR JAWS
Y
X
{jaws_file}
0.7, 0.01, 1, 0,
2.0, 0.01, 1, 0,
TBJAWS700
2.0, 0.01, 1, 0,
TBJAWS700
*********** start of CM CONESTAK with identifier BASEPLATE  ***********
25.0, RMAX
Baseplate (0.6 inch) approximated as cylinders
45.176, 15.24, ZMIN, RBN
1, NUMBER OF LAYERS
1.524, 15.24, 15.24,
0.7, 0.01, 2, 0, OUTER WALL
BPLATE700
0.7, 0.01, 1, 0,
AIR700ICRU
0.7, 0.01, 3, 0,
BPLATE700
*********** start of CM SYNCVMLC with identifier MLC  ***********
25.0, RMAX
TrueBeam Millenium MLC
1, 3, {delivery_mode}, ORIENT, NGROUP, MODE
48.25, ZMIN
6.657, ZTHICK
0.4705, 0.04, 0.04, 0.1354, 0.3252, 0.1227, 48.25, 48.533001, 51.523998, 51.731998, 52.98, 53.27999999, 2.0, 54.5474, 54.812,
0.2325, 0.04, 0.04, 0.0929, 0.1371, 0.1371, 48.345, 48.6096, 49.8277, 49.8277, 2.0, 51.625, 51.627, 54.7, 54.746,
0.2338, 0.04, 0.04, 0.0354, 0.1285, 0.1235, 48.412, 48.531, 51.631, 51.732, 53.3293, 53.6293, 2, 54.5474, 54.812,
10, 1
40, 2
10, 1
-9.57615, START
0.0057, LEAFGAP
0, ENDTYPE
8, ZFOCUS or RADIUS of leaf ends
0, ZFOCUS of leaf sides
{mlc_file}
0.7, 0.01, 1, 0,
AIR700ICRU
2.0, 0.01, 2, 0, 0,
VMLC700
2.0, 0.01, 3, 0,
STEEL700ICRU
*********** start of CM BLOCK with identifier reticle  ***********
20.0, RMAX
cross-hair reticle
55.7, 55.71016, 0.0, ZMIN, ZMAX, ZFOCUS
1, # OF SUBREGIONS
4, NUMBER OF POINTS IN SUBREGION 1
-11.0, -11.0,
11.0, -11.0,
11.0, 11.0,
-11.0, 11.0,
20, 20, -20, -20,
0.7, 0.01, 1, 0,
1.0, 0.01, 1, 0,
MYLAR700ICRU
100, 0.01, 1, 0,
W700ICRU
*********** start of CM SLABS with identifier AIRSLAB ***********
25, RMAX
Air slab
1, NSLABS
59.99, ZMIN
{filler_depth}, 0.7, 0.01, 0, 0, 1
AIR700ICRU
*********************end of all CMs*****************************
 #########################
 :Start MC Transport Parameter:

 Global ECUT= 0.7
 Global PCUT= 0.01
 Global SMAX= 100000000000
 ESTEPE= 0.25
 XIMAX= 0.5
 Boundary crossing algorithm= EXACT
 Skin depth for BCA= 3
 Electron-step algorithm= PRESTA-II
 Spin effects= On
 Brems angular sampling= KM
 Brems cross sections= NRC
 Bound Compton scattering= Off
 Compton cross sections= default
 Pair angular sampling= KM
 Pair cross sections= NRC
 Photoelectron angular sampling= Off
 Rayleigh scattering= Off
 Atomic relaxations= Off
 Electron impact ionization= Off
 Photon cross sections= xcom
 Photon cross-sections output= Off

 :Stop MC Transport Parameter:
 #########################
